PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = UCI SBSODS
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Routines
  Routine trial
    TextComponent Instructions
      letterHeight = 0.045
      pos = (0, 0) 
      startVal [time (s)] = 0.0
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      text:
        Santa Barbara Sense-of-Direction Scale

        The following statements ask you about your spatial and navigational abilities, preferences, and experiences. After each statement, you should select a number to indicate your level of agreement with the statement. To select a number, press the corresponding number on your keyboard. Select “1” if you strongly agree that the statement applies to you, “7” if you strongly disagree, or some number in between if your agreement is intermediate. Select “4” if you neither agree nor disagree.

        Press any key to continue.
    KeyboardComponent ForceStop
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine SBSODS_Trial_1
    TextComponent text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        I am very good at giving directions.

        Strongly agree 1  2  3  4  5  6  7  Strongly disagree
    KeyboardComponent key_resp
      allowedKeys = '1', '2', '3', '4', '5', '6', '7'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  Routine SBSODS_Trial_2
    TextComponent text_2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        I have a poor memory for where I left things.

        Strongly agree 1  2  3  4  5  6  7  Strongly disagree
    KeyboardComponent key_resp_2
      allowedKeys = '1', '2', '3', '4', '5', '6', '7'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  Routine SBSODS_Trial_3
    TextComponent text_3
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        I am very good at judging distances.

        Strongly agree 1  2  3  4  5  6  7  Strongly disagree
    KeyboardComponent key_resp_3
      allowedKeys = '1', '2', '3', '4', '5', '6', '7'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  Routine SBSODS_Trial_4
    TextComponent text_4
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        My “sense of direction” is very good.

        Strongly agree 1  2  3  4  5  6  7  Strongly disagree
    KeyboardComponent key_resp_4
      allowedKeys = '1', '2', '3', '4', '5', '6', '7'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  Routine SBSODS_Trial_5
    TextComponent text_5
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        I tend to think of my environment in terms of cardinal directions (N, S, E, W).

        Strongly agree 1  2  3  4  5  6  7  Strongly disagree
    KeyboardComponent key_resp_5
      allowedKeys = '1', '2', '3', '4', '5', '6', '7'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  Routine SBSODS_Trial_6
    TextComponent text_6
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        I very easily get lost in a new city.

        Strongly agree 1  2  3  4  5  6  7  Strongly disagree
    KeyboardComponent key_resp_6
      allowedKeys = '1', '2', '3', '4', '5', '6', '7'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  Routine SBSODS_Trial_7
    TextComponent text_7
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        I enjoy reading maps.

        Strongly agree 1  2  3  4  5  6  7  Strongly disagree
    KeyboardComponent key_resp_7
      allowedKeys = '1', '2', '3', '4', '5', '6', '7'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  Routine SBSODS_Trial_8
    TextComponent text_8
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        I have trouble understanding directions

        Strongly agree 1  2  3  4  5  6  7  Strongly disagree
    KeyboardComponent key_resp_8
      allowedKeys = '1', '2', '3', '4', '5', '6', '7'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  Routine SBSODS_Trial_9
    TextComponent text_9
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        I am very good at reading maps.

        Strongly agree 1  2  3  4  5  6  7  Strongly disagree
    KeyboardComponent key_resp_9
      allowedKeys = '1', '2', '3', '4', '5', '6', '7'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  Routine SBSODS_Trial_10
    TextComponent text_10
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        I don’t remember routes very well while riding as a passenger in a car.

        Strongly agree 1  2  3  4  5  6  7  Strongly disagree
    KeyboardComponent key_resp_10
      allowedKeys = '1', '2', '3', '4', '5', '6', '7'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  Routine SBSODS_Trial_11
    TextComponent text_11
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        I don’t enjoy giving directions.

        Strongly agree 1  2  3  4  5  6  7  Strongly disagree
    KeyboardComponent key_resp_11
      allowedKeys = '1', '2', '3', '4', '5', '6', '7'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  Routine SBSODS_Trial_12
    TextComponent text_12
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        It’s not important to me to know where I am.

        Strongly agree 1  2  3  4  5  6  7  Strongly disagree
    KeyboardComponent key_resp_12
      allowedKeys = '1', '2', '3', '4', '5', '6', '7'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  Routine SBSODS_Trial_13
    TextComponent text_13
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        I usually let someone else do the navigational planning for long trips.

        Strongly agree 1  2  3  4  5  6  7  Strongly disagree
    KeyboardComponent key_resp_13
      allowedKeys = '1', '2', '3', '4', '5', '6', '7'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  Routine SBSODS_Trial_14
    TextComponent text_14
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        I can usually remember a new route after I have traveled it only once.

        Strongly agree 1  2  3  4  5  6  7  Strongly disagree
    KeyboardComponent key_resp_14
      allowedKeys = '1', '2', '3', '4', '5', '6', '7'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  Routine SBSODS_Trial_15
    TextComponent text_15
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        I don’t have a very good “mental map” of my environment.

        Strongly agree 1  2  3  4  5  6  7  Strongly disagree
    KeyboardComponent key_resp_15
      allowedKeys = '1', '2', '3', '4', '5', '6', '7'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  Routine Thank_you
    TextComponent Thankyou
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Thank you!

        Press any key to exit.
    KeyboardComponent Exit
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine trial
  Routine SBSODS_Trial_1
  Routine SBSODS_Trial_2
  Routine SBSODS_Trial_3
  Routine SBSODS_Trial_4
  Routine SBSODS_Trial_5
  Routine SBSODS_Trial_6
  Routine SBSODS_Trial_7
  Routine SBSODS_Trial_8
  Routine SBSODS_Trial_9
  Routine SBSODS_Trial_10
  Routine SBSODS_Trial_11
  Routine SBSODS_Trial_12
  Routine SBSODS_Trial_13
  Routine SBSODS_Trial_14
  Routine SBSODS_Trial_15
  Routine Thank_you
